PsychoPy2experiment version="2022.2.5"
Settings
  Data filename = u'data/%s_%s_%s' % (expName, expInfo['participant_name'],expInfo['participant_number'])
  Enable Escape = False
  Experiment info = {'participant_name': 'test', 'participant_number': '001'}
  Full-screen window = True
  Monitor = myMonitor
  Screen = 0
  Units = pix
  Window size (pixels) = [1680, 1050]
  color = $[0.5,0.5,0.5]
  expName = example_reading
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine ET_setup
    CodeComponent code_et_setup
      Code Type = Py
      Before Experiment:
        import pylink
        from EyeLinkCoreGraphicsPsychoPy import EyeLinkCoreGraphicsPsychoPy
        from psychopy import monitors
        from PIL import Image

        # For random string as temporary file name on host PC
        import random
        import string
      Begin Experiment:
        # open a connection to the tracker
        tk = pylink.EyeLink('100.1.1.1')

        # function that creates string of random letters
        def get_random_string(length):
           letters = string.ascii_lowercase
           result_str = ''.join(random.choice(letters) for i in range(length))
           return result_str

        # open an EDF data file on the Host and write a file header
        # the file name should not exceed 8 characters
        dataFileName = get_random_string(8) + '.EDF'

        # writes temp file name into PsychPy log file
        # This is for cases in which the experiment is interupted and files
        # are not transfered from the host to the presentation PC. You might
        # be able to identify and transfer the edf-file manually afterwards
        # via file manager.
        logging.log(level=logging.EXP, msg=dataFileName)

        tk.openDataFile(dataFileName)

        # define screen dimensions
        scnWidth, scnHeight = (1680, 1050)

        #open a window; set winType='pyglet'
        # for some strange reason PsychoPy Builder starts with a win useFBO = True
        win = visual.Window((scnWidth, scnHeight), fullscr=True, monitor='myMonitor',
                            winType='pyglet', color=[0.5,0.5,0.5], units='pix', allowStencil=True,
                            allowGUI = False, useFBO = False)


        win.mouseVisible = False


        ### function run when quit button is pressed
        def shutDownFunc():
           # close the EDF data file and put the tracker in idle mode
           tk.setOfflineMode()
           pylink.pumpDelay(100)
           tk.closeDataFile()
           # download EDF file to Display PC and put it in local folder ('edfData')
           msg = 'EDF data is transfering from EyeLink Host PC...'
           edfTransfer = visual.TextStim(win, text=msg, color='black')
           edfTransfer.draw()
           win.flip()
           pylink.pumpDelay(500)
           # make sure the 'edfData' folder is there, create one if not
           dataFolder = os.getcwd() + os.sep +'edfData'
           if not os.path.exists(dataFolder):
                os.makedirs(dataFolder)

           tk.receiveDataFile(dataFileName, 'edfData' + os.sep + dataFileName)
           # close the connection to tracker
           tk.close()

           # renaming edf file
           os.rename('edfData' + os.sep + dataFileName,'edfData' + os.sep + expInfo['participant_name'] +'_aborted.EDF')
           core.quit()


        # since the standard quit key "esc" would interfer with the recalibration routine
        #event.globalKeys.add(key='q', func=core.quit, name='shutdown')
        event.globalKeys.add(key='q', func=shutDownFunc, name='shutdown')
  Routine ET_calibration
    CodeComponent code_et_cali
      Code Type = Py
      Begin Routine:
        # set up a custom graphics envrionment (EyeLinkCoreGraphicsPsychopy) for calibration
        genv = EyeLinkCoreGraphicsPsychoPy(tk, win)

        # Beeps to play during calibration, validation and drift correction
        # parameters: target, good, error
        #     target -- sound to play when target moves
        #     good -- sound to play on successful operation
        #     error -- sound to play on failure or interruption
        # Each parameter could be ''--default sound, 'off'--no sound, or a wav file
        genv.setCalibrationSounds('off', 'off', 'off')

        # calibration target size
        genv.setTargetSize(20)

        # configure the calibration target, could be a 'circle',
        genv.setTargetType('circle')

        # open the graphics env
        pylink.openGraphicsEx(genv)

        # put the tracker in idle mode before we change its parameters
        tk.setOfflineMode()
        pylink.pumpDelay(100)

        # IMPORTANT: send screen resolution to the tracker
        # see Eyelink Installation Guide, Section 8.4: Customizing Your PHYSICAL.INI Settings
        tk.sendCommand("screen_pixel_coords = 0 0 %d %d" % (scnWidth-1, scnHeight-1))
        # save screen resolution in EDF data, so Data Viewer can correctly load experimental graphics
        tk.sendMessage("DISPLAY_COORDS = 0 0 %d %d" % (scnWidth-1, scnHeight-1))
        # sampling rate, 250, 500, 1000, or 2000; this command is not supported for EyeLInk II/I trackers
        tk.sendCommand("sample_rate 500")
        # detect eye events based on "GAZE" (or "HREF") data
        tk.sendCommand("recording_parse_type = GAZE")
        # Saccade detection thresholds: 0-> standard/coginitve, 1-> sensitive/psychophysiological
        # see Eyelink User Manual, Section 4.3: EyeLink Parser Configuration
        tk.sendCommand("select_parser_configuration 0")
        # choose a calibration type, H3, HV3, HV5, HV13 (HV = horiztonal/vertical),
        # tk.setCalibrationType('HV9') also works, see the Pylink manual
        tk.sendCommand("calibration_type = HV5")

        tk.sendMessage('subject_nr %s' % expInfo['participant_number'])
        # tracker hardware, 1-EyeLink I, 2-EyeLink II, 3-Newer models (1000/1000Plus/Portable DUO)
        hardware_ver = tk.getTrackerVersion()
        # tracking software version
        software_ver = 0
        if hardware_ver == 3:
            tvstr = tk.getTrackerVersionString()
            vindex = tvstr.find("EYELINK CL")
            software_ver = float(tvstr.split()[-1])

        # sample and event data saved in EDF data file
        # see sectin 4.6 of the EyeLink user manual, software version > 4 adds remote tracking (and thus HTARGET)
        tk.sendCommand("file_event_filter = LEFT,RIGHT,FIXATION,SACCADE,BLINK,MESSAGE,BUTTON,INPUT")
        if software_ver >= 4:
            tk.sendCommand("file_sample_data  = LEFT,RIGHT,GAZE,GAZERES,PUPIL,HREF,AREA,STATUS,HTARGET,INPUT")
        else:
            tk.sendCommand("file_sample_data  = LEFT,RIGHT,GAZE,GAZERES,PUPIL,HREF,AREA,STATUS,INPUT")

        # sample and event data available over the link
        tk.sendCommand("link_event_filter = LEFT,RIGHT,FIXATION,FIXUPDATE,SACCADE,BLINK,BUTTON,INPUT")
        if software_ver >= 4:
            tk.sendCommand("link_sample_data  = LEFT,RIGHT,GAZE,GAZERES,PUPIL,HREF,AREA,STATUS,HTARGET,INPUT")
        else:
            tk.sendCommand("link_sample_data  = LEFT,RIGHT,GAZE,GAZERES,PUPIL,HREF,AREA,STATUS,INPUT")


        # instructions for calibration
        msg = visual.TextStim(win, text='Press ENTER twice\n' +
                                        'to start eye-tracker setup')
        msg.draw()

        win.flip()

        event.waitKeys()

        # set up the camera and calibrate the tracker
        tk.doTrackerSetup()

        # hiding the mouse
        mouse.setPos(newPos=(10000,-10000))
  Routine sentence
    TextComponent text_sent
      color = black
      font = Courier New
      letterHeight = 22
      saveStartStop = False
      startVal [frame N] = 0.0
      text [set every repeat] = $sent_var
      units = pix
      wrapWidth = 1520
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    PolygonComponent fix_end_point
      fillColor = $[0.5,0.5,0.5]
      lineColor = $[-1.000,-1.000,-1.000]
      lineWidth = 5
      nVertices = 100
      pos = (760, 0)
      saveStartStop = False
      shape = regular polygon...
      size = (16,16)
      startVal [frame N] = 0
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [frame N] = 0
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    CodeComponent code_et_msg_finished
      Code Type = Py
      Begin Routine:
        text_sent.alignText='left'
        def sendMSGsentStart():
            tk.sendMessage('onset_sentence %d' %trial_index_var)
        win.callOnFlip(sendMSGsentStart)

        # hiding the mouse
        mouse.setPos(newPos=(10000,-10000))
      Each Frame:
        if len(key_resp.keys)>0:
            tk.sendMessage('finished_reading  %d' % trial_index_var)
  Routine question
    TextComponent text_quest
      color = black
      font = Courier New
      letterHeight = 22
      pos = (0, 100)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $quest_var
      units = pix
      wrapWidth = 800
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    TextComponent text_ans_1
      color = black
      font = Courier New
      letterHeight = 22
      pos = (0, 50)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $ans_1_var
      wrapWidth = 700
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    TextComponent text_ans_2
      color = black
      font = Courier New
      letterHeight = 22
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $ans_2_var
      wrapWidth = 700
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    KeyboardComponent key_resp_quest
      allowedKeys = 'left','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_align_quest
      Code Type = Py
      Begin Routine:
        text_quest.alignText='left'
        text_ans_1.alignText='left'
        text_ans_2.alignText='left'

        # hiding the mouse
        mouse.setPos(newPos=(10000,-10000))

        def sendMSGquestStart():
            tk.sendMessage('onset_question %d' %trial_index_var)
        win.callOnFlip(sendMSGquestStart)
      Each Frame:
        if len(key_resp_quest.keys)>0:
            tk.sendMessage('response %s' %key_resp_quest.keys)
  Routine ET_stop_record
    CodeComponent code_et_stop_record
      Code Type = Py
      Begin Routine:
        # stop recording
        tk.sendMessage('stop_recording_trial_index %d' % (trials.thisN +1))
        tk.stopRecording()
  Routine ET_exit
    CodeComponent code_et_exit
      Code Type = Py
      End Experiment:
        # close the EDF data file and put the tracker in idle mode
        tk.setOfflineMode()
        pylink.pumpDelay(100)
        tk.closeDataFile()

        # download EDF file to Display PC and put it in local folder ('edfData')
        msg = 'EDF data is transfering from EyeLink Host PC...'
        edfTransfer = visual.TextStim(win, text=msg, color='black')
        edfTransfer.draw()
        win.flip()
        pylink.pumpDelay(500)

        # make sure the 'edfData' folder is there, create one if not
        dataFolder = os.getcwd() + os.sep +'edfData'
        if not os.path.exists(dataFolder):
            os.makedirs(dataFolder)
        tk.receiveDataFile(dataFileName, 'edfData' + os.sep + dataFileName)

        # close the connection to tracker
        tk.close()

        # renaming edf file
        os.rename('edfData' + os.sep + dataFileName,'edfData' + os.sep + expInfo['participant_name'] +'.EDF')
  Routine thanks
    TextComponent text_end
      color = black
      font = Courier New
      letterHeight = 22
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thanks!
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  Routine instructions
    TextComponent text_instruc
      color = black
      font = Courier New
      letterHeight = 22
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = pix
      wrapWidth = 1000
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      text:
        Dear participant,

        During the following experiment we will record your eye movements while you are reading ten simple sentences. Before we can start we will have to calibrate the eye tracker. For this purpose you will have to follow the little point that will appear at various positions of the screen. Please direct your gaze at the point until it disappears. It is not important that you do this quickly but it is crucial that you do this as accurately as possible.

        1.) Before each trial a little dot will appear at the left side of the screen. Please look at it and press the space bar as soon as you are ready; the sentence will appear.

        2.) Read the sentence at your usual reading speed and fixate the dot at the right side of the screen. Press the space bar again to indicate that you have finished reading.

        3.) A very simple question concerning the content of the sentence will appear. For option a) press the arrow key left; for option b) press the arrow key right.

        Press the space bar to start the experiment.
    KeyboardComponent key_instruction_go
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        text_instruc.alignText='left'
        # initiate a mouse instance just to hide it
        mouse = event.Mouse(win=win)
        # hiding the mouse
        mouse.setPos(newPos=(10000,-10000))
  Routine ET_screenshot
    CodeComponent code_et_screen
      Code Type = Py
      Begin Routine:
        # draw stimuli in the back buffer
        text_sent.draw()
        fix_end_point.draw()
        # create a screenshot so we can use it during analyses to overlay the gaze
        # taking a screenshot can be time consuming, not recommended for timing critical tasks
        if not os.path.exists('images'):
            os.mkdir('images')

        screenshot = 'images' + os.sep +  'trial_%d.png' % trial_index_var
        win.getMovieFrame('back')
        win.saveMovieFrames(screenshot)
  Routine ET_screenshot2
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        # draw stimuli in the back buffer
        text_quest.draw()
        text_ans_1.draw()
        text_ans_2.draw()
        # create a screenshot so we can use it during analyses to overlay the gaze
        # taking a screenshot can be time consuming, not recommended for timing critical tasks
        if not os.path.exists('images'):
            os.mkdir('images')

        screenshot = 'images' + os.sep +  'trial_q_%d.png' % trial_index_var
        win.getMovieFrame('back')
        win.saveMovieFrames(screenshot)
  Routine ET_backdrop
    CodeComponent code_et_backdrop
      Code Type = Py
      Begin Routine:
        # put the tracker in idle mode before we start recording
        tk.setOfflineMode()
        pylink.pumpDelay(100)


        # backdrop image on the Host screen
        # this is SLOW and may cause timing problems for some tasks
        # open image with the PIL Image moduel
        im = Image.open('images' + os.sep + 'trial_%d.png' %trial_index_var)
        #im = Image.open('images' + os.sep + 'static.png')
        w,h = im.size
        pixels = im.load()
        # use the list comprehension trick to convert all image pixels into a <pixel> format
        # supported by the Host PC, pixels = [line1, ...lineH], line = [pix1,...pixW], pix=(R,G,B)
        pixels_2transfer = [[pixels[i,j] for i in range(w)] for j in range(h)]
        tk.sendCommand('clear_screen 0') # clear the host screen
        # call the bitmapBackdrop() command to show backdrop image on the Host
        # arguments: width, height, pixel, crop_x, crop_y, crop_width, crop_height, x, y on Host, option
        #tk.bitmapBackdrop(w, h, pixels_2transfer, 0, 0,w,h,0,0,pylink.BX_MAXCONTRAST)
        tk.bitmapSaveAndBackdrop(w, h, pixels_2transfer, 0, 0, w, h, 'tmp_img', 'images'+ os.sep ,
        pylink.SV_NOREPLACE, 0, 0, pylink.BX_MAXCONTRAST)
  Routine ET_drift
    CodeComponent code_et_drift
      Code Type = Py
      Begin Routine:
        # drift check
        # the doDriftCorrect() function requires target position in integers
        # the last two arguments: draw_target (1-default, 0-user draw the target then call this function)
        #                         allow_setup (1-press ESCAPE to recalibrate, 0-not allowed)
        try:
            err = tk.doDriftCorrect(88,525, 1, 1)
        except:
                tk.doTrackerSetup()
                tk.doDriftCorrect(88,525,1,1)


        # send the standard "TRIALID" message to mark the start of a trial
        # see Data Viewer User Manual, Section 7: Protocol for EyeLink Data to Viewer Integration
        tk.sendMessage('TRIALID %d' % trial_index_var)
        tk.sendMessage('stimulus %s'% sent_var)
        # record_status_message : show some info on the Host PC - OPTIONAL
        # here we show how many trial has been tested
        #tk.sendCommand("record_status_message 'TRIAL number %s'"% trial_index_var)
        tk.sendCommand("record_status_message 'TRIAL number %s out of 10'"% (trials.thisN +1))

        # start recording
        # arguments: sample_to_file, events_to_file, sample_over_link, event_over_link (1-yes, 0-no)
        err = tk.startRecording(1, 1, 1, 1)
        pylink.pumpDelay(100)  # wait for 100 ms to cache some samples
        tk.sendMessage('start_trial_index %d' % (trials.thisN+1))
        tk.sendMessage('start_stim_id %d' % trial_index_var)


        # hiding the mouse
        mouse.setPos(newPos=(10000,-10000))

        win.flip()
Flow
  Routine ET_setup
  Routine instructions
  Routine ET_calibration
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = example_sentences.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('trial_index_var', 1), ('sent_var', "Tom's father used to go fishing with his kids until they became vegetarian."), ('quest_var', 'The kids went: '), ('ans_1_var', 'a) fishing.'), ('ans_2_var', 'b) hiking.')]),
      OrderedDict([('trial_index_var', 2), ('sent_var', 'The strange old lady who usually feeds the cats suddenly disappeared.'), ('quest_var', 'The old lady feeds:'), ('ans_1_var', 'a) pigeons.'), ('ans_2_var', 'b) cats.')]),
      OrderedDict([('trial_index_var', 3), ('sent_var', 'Several penguins escaped their cages in the zoo and went for a walk in the park.'), ('quest_var', 'The penguins went to:'), ('ans_1_var', 'a) a park.'), ('ans_2_var', 'b) a lake.')]),
      OrderedDict([('trial_index_var', 4), ('sent_var', "Even as Joe's drug addiction became obvious, he denied having a problem."), ('quest_var', 'Did Joe go to rehab?'), ('ans_1_var', 'a) Yes.'), ('ans_2_var', 'b) No.')]),
      OrderedDict([('trial_index_var', 5), ('sent_var', 'Although I really hated mathematics in school, I became a decent engineer. '), ('quest_var', 'I hated:'), ('ans_1_var', 'a) math.'), ('ans_2_var', 'b) physics.')]),
      OrderedDict([('trial_index_var', 6), ('sent_var', 'After the terror attack, heavily armed soldiers patrolled the streets of Paris.'), ('quest_var', 'Who was heavily armed?'), ('ans_1_var', 'a) Policemen.'), ('ans_2_var', 'b) Soldiers.')])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
    Routine ET_backdrop
    Routine ET_drift
    Routine sentence
    Routine question
    Routine ET_stop_record
  LoopTerminator trials
  Routine ET_exit
  Routine thanks
